PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['Deltager ID'], expName, expInfo['date'])
  Experiment info = {'Deltager ID': 'f"{randint(0, 999999):05.0f}"', 'Alder': '', 'Køn': "['Kvinde', 'Mand', 'Andet']"}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 800]
  color = white
  expName = Undersøgelse af klimamærket
  keyboardBackend = ioHub
  runMode = 0
  rush = True
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Routines
  Routine instructionsRoutine
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        text.setAlignHoriz("left");
      Begin Routine:
        text.alignText = 'left'
    TextComponent text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Instruktioner:

        Din opgave er at vurdere, hvor stor en klimapåvirkning indholdet af kurven har i gennemsnit. Hver kurv består af 5 varer vist på skærmen.
        Du vil blive bedt om at angive kurvens gennemsnitlige klimapåvirkning ved at vælge det klimamærke der passer til din vurdering.

        Når du har valgt den knap (A–E) du mener passer bedst, skal du klikke på "Næste" for at bekræfte dit valg.

        Efter hver vurdering vil du blive bedt om at vurdere, hvor sikker du er på dit svar, på en skala fra 0 = Usikker → 7 = Sikker.

        Du vil først blive ført igennem 3 øvelsesrunder. Derefter starter undersøgelsen.

        Klik på "Næste", når du er klar til at starte.
    TextComponent nextButtonTextInstruct
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Næste
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    PolygonComponent nextButtonRectInstruct
      lineColor = grey
      lineWidth = 0.9
      pos = (0, -0.35)
      shape = rectangle
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouseIntruct
      clickable = $[nextButtonTextInstruct, nextButtonRectInstruct]
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine experimentalTrialRoutine
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        selected_items = all_items
          .map(value => ({ value, sort: Math.random() }))
          .sort((a, b) => a.sort - b.sort)
          .map(({ value }) => value)
          .slice(0, 5);

        // Extract item attributes
        itemImages = selected_items.map(item => item.itemImage);
        itemNames = selected_items.map(item => item.item);
        itemWeightsText = selected_items.map(item => item.itemWeight);
        itemPrices = selected_items.map(item => item.price);
        itemWeights = selected_items.map(item => parseFloat(item.weight));
        itemCO2 = selected_items.map(item => parseFloat(item.co2));
        itemLabels = selected_items.map(item => item.label);
        itemLabelImages = selected_items.map(item => item.labelImage);

        // Compute weighted CO₂ impact
        let total_weight = itemWeights.reduce((a, b) => a + b, 0);
        let weighted_sum = 0;
        for (let i = 0; i < itemWeights.length; i++) {
            weighted_sum += itemWeights[i] * itemCO2[i];
        }
        weighted_average_co2 = (total_weight > 0) ? (weighted_sum / total_weight) : 0;

        // Determine basket label
        if (weighted_average_co2 <= 1.1) {
            basket_label = "A";
        } else if (weighted_average_co2 <= 2.5) {
            basket_label = "B";
        } else if (weighted_average_co2 <= 5) {
            basket_label = "C";
        } else if (weighted_average_co2 <= 10) {
            basket_label = "D";
        } else {
            basket_label = "E";
        }

        // Show scale image
        //scale.setImage(scaleImage);

        // Align text (left for names/weights, right for prices)
        [item1_name, item2_name, item3_name, item4_name, item5_name,
         item1_weight, item2_weight, item3_weight, item4_weight, item5_weight].forEach(comp => {
            comp.alignText = "left";
        });

        [item1_price, item2_price, item3_price, item4_price, item5_price].forEach(comp => {
            comp.alignText = "right";
        });

        // Reset button selection
        selectedAnswer = null;
        buttons = [buttonTextA, buttonTextB, buttonTextC, buttonTextD, buttonTextE];
        buttons.forEach(btn => {
            btn.color = "black";
        });

        // Start clock
        if (typeof responseClock === 'undefined') {
            responseClock = new util.Clock();
        } else {
         responseClock.reset();
        }
        responseRT = null;
      Begin Routine:
        # Draw 5 random items
        import random
        selected_items = random.sample(all_items, 5)

        # Extract attributes from selected items
        itemImages = [item["itemImage"] for item in selected_items]
        itemNames = [item["item"] for item in selected_items]
        itemWeightsText = [item["itemWeight"] for item in selected_items]
        itemPrices = [item["price"] for item in selected_items]
        itemWeights = [float(item["weight"]) for item in selected_items]
        itemCO2 = [float(item["co2"]) for item in selected_items]
        itemLabels = [item["label"] for item in selected_items]
        itemLabelImages = [item["labelImage"] for item in selected_items]

        # Compute weighted CO₂ impact
        total_weight = sum(itemWeights)
        weighted_sum = sum(itemWeights[i] * itemCO2[i] for i in range(len(itemWeights)))
        weighted_average_co2 = weighted_sum / total_weight if total_weight > 0 else 0

        # Determine correct label
        if weighted_average_co2 <= 1.1:
            basket_label = "A"
        elif weighted_average_co2 <= 2.5:
            basket_label = "B"
        elif weighted_average_co2 <= 5:
            basket_label = "C"
        elif weighted_average_co2 <= 10:
            basket_label = "D"
        else:
            basket_label = "E"

        # Show the scale in experimental trials
        scale.setImage(scaleImage)

        # Align left/right text
        for text_component in [item1_name, item2_name, item3_name, item4_name, item5_name,
                               item1_weight, item2_weight, item3_weight, item4_weight, item5_weight]:
            text_component.alignText = 'left'

        for text_component in [item1_price, item2_price, item3_price, item4_price, item5_price]:
            text_component.alignText = 'right'

        # Reset button colors
        selectedAnswer = None
        buttons = [buttonTextA, buttonTextB, buttonTextC, buttonTextD, buttonTextE]
        for btn in buttons:
            btn.color = 'black'

        # Start RT clock
        responseClock.reset()
        responseRT = None
      Each Frame:
        # Button list and labels
        boxes = [buttonA, buttonB, buttonC, buttonD, buttonE]
        buttons = [buttonTextA, buttonTextB, buttonTextC, buttonTextD, buttonTextE]
        labels = ["A", "B", "C", "D", "E"]

        # Check if any box OR its corresponding text is clicked
        for i in range(len(buttons)):
            if mouse.isPressedIn(buttons[i]) or mouse.isPressedIn(boxes[i]):
                selectedAnswer = labels[i]

                # Reset all text colors
                for btn in buttons:
                    btn.color = 'black'

                # Highlight only the selected text
                buttons[i].color = '#b30734'

        # Allow "Next" only after selection
        if selectedAnswer is not None:
            if mouse.isPressedIn(nextButton):
                continueRoutine = False

        # Track RT
        if selectedAnswer is not None:
            if mouse.isPressedIn(nextButton):
                responseRT = responseClock.getTime()
                continueRoutine = False
      Each JS Frame:
        boxes = [buttonA, buttonB, buttonC, buttonD, buttonE];
        buttons = [buttonTextA, buttonTextB, buttonTextC, buttonTextD, buttonTextE];
        labels = ["A", "B", "C", "D", "E"];
        for (var i, _pj_c = 0, _pj_a = util.range(buttons.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            if ((mouse.isPressedIn(buttons[i]) || mouse.isPressedIn(boxes[i]))) {
                selectedAnswer = labels[i];
                for (var btn, _pj_f = 0, _pj_d = buttons, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                    btn = _pj_d[_pj_f];
                    btn.color = "black";
                }
                buttons[i].color = "#b30734";
            }
        }
        if ((selectedAnswer !== null)) {
            if (mouse.isPressedIn(nextButton)) {
                continueRoutine = false;
            }
        }

        if (selectedAnswer !== null && mouse.isPressedIn(nextButton)) {
            responseRT = responseClock.getTime();
            psychoJS.experiment.addData('responseRT', responseRT);
            continueRoutine = false;
        }
      End JS Routine:
        item_list = function () {
            var _pj_a = [], _pj_b = selected_items;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var item = _pj_b[_pj_c];
                _pj_a.push(item["item"]);
            }
            return _pj_a;
        }
        .call(this);
        item_string = item_list.join(", ");
        psychoJS.experiment.addData("items", item_string);
        psychoJS.experiment.addData("avg_co2", weighted_average_co2);
        psychoJS.experiment.addData("basketLabel", basket_label);
        psychoJS.experiment.addData("response", selectedAnswer);
        psychoJS.experiment.addData("responseRT", responseRT);
        is_correct = Number.parseInt((selectedAnswer === basket_label));
        psychoJS.experiment.addData("is_correct", is_correct);
        psychoJS.experiment.addData("trialType", "experimental");
        psychoJS.experiment.addData("scaleUsed", scale_condition);
      End Routine:
        # Save selected items as comma-separated list
        item_list = [item["item"] for item in selected_items]
        item_string = ", ".join(item_list)
        thisExp.addData("items", item_string)

        # Save average CO₂ score (you already calculated this)
        thisExp.addData("avg_co2", weighted_average_co2)

        # Save bakset label
        thisExp.addData("basketLabel", basket_label)

        # Save participant's selected label
        thisExp.addData("response", selectedAnswer)

        # Save reaction time
        thisExp.addData("responseRT", responseRT)

        # Save whether the response was correct
        is_correct = int(selectedAnswer == basket_label)
        thisExp.addData("is_correct", is_correct)

        # Save trial type and condition
        thisExp.addData("trialType", "experimental")
        thisExp.addData("scaleUsed", scale_condition)
    TextComponent instructionTextTrial
      color = black
      letterHeight = 0.03
      pos = (-0.40, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Hvad er kurvens gennemsnitlige klimaaftryk? 
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    ImageComponent item1_img
      anchor = top-right
      image [set every repeat] = $itemImages[0]
      pos = (0.215, 0.378)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent item2_img
      anchor = top-right
      image [set every repeat] = $itemImages[1]
      pos = (0.215, 0.2455)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent item3_img
      anchor = top-right
      image [set every repeat] = $itemImages[2]
      pos = (0.215, 0.113)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent item4_img
      anchor = top-right
      image [set every repeat] = $itemImages[3]
      pos = (0.215, -0.0195)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent item5_img
      anchor = top-right
      image [set every repeat] = $itemImages[4]
      pos = (0.215, -0.152)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent item1_name
      color = black
      letterHeight = 0.028
      pos = (0.735, 0.37)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[0]
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    TextComponent item2_name
      color = black
      letterHeight = 0.028
      pos = (0.735, 0.2375)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[1]
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    TextComponent item3_name
      color = black
      letterHeight = 0.028
      pos = (0.735, 0.105)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[2]
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    TextComponent item4_name
      color = black
      letterHeight = 0.028
      pos = (0.735, -0.0275)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[3]
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    TextComponent item5_name
      color = black
      letterHeight = 0.028
      pos = (0.735, -0.16)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[4]
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    TextComponent item1_weight
      color = black
      letterHeight = 0.025
      pos = (0.735, 0.32)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[0]
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    TextComponent item2_weight
      color = black
      letterHeight = 0.025
      pos = (0.735, 0.1875)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[1]
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    TextComponent item3_weight
      color = black
      letterHeight = 0.025
      pos = (0.735, 0.055)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[2]
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    TextComponent item4_weight
      color = black
      letterHeight = 0.025
      pos = (0.735, -0.0775)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[3]
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    TextComponent item5_weight
      color = black
      letterHeight = 0.025
      pos = (0.735, -0.21)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[4]
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    TextComponent item1_price
      color = black
      letterHeight = 0.028
      pos = (0.152, 0.37)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[0]
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    TextComponent item2_price
      color = black
      letterHeight = 0.028
      pos = (0.152, 0.2375)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[1]
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    TextComponent item3_price
      color = black
      letterHeight = 0.028
      pos = (0.155, 0.105)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[2]
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    TextComponent item4_price
      color = black
      letterHeight = 0.028
      pos = (0.155, -0.0275)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[3]
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    TextComponent item5_price
      color = black
      letterHeight = 0.028
      pos = (0.155, -0.16)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[4]
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    ImageComponent item1_label
      anchor = center-right
      image [set every repeat] = $itemLabelImages[0]
      pos = (0.775, 0.365)
      size = (0.08, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent item2_label
      anchor = center-right
      image [set every repeat] = $itemLabelImages[1]
      size = (0.08, 0.04)
      startVal [time (s)] = 0.0
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      pos:
        (0.775, 0.2325)
    ImageComponent item3_label
      anchor = center-right
      image [set every repeat] = $itemLabelImages[2]
      size = (0.08, 0.04)
      startVal [time (s)] = 0.0
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      pos:
        (0.775, 0.112)
    ImageComponent item4_label
      anchor = center-right
      image [set every repeat] = $itemLabelImages[3]
      size = (0.08, 0.04)
      startVal [time (s)] = 0.0
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      pos:
        (0.775, -0.0345)
    ImageComponent item5_label
      anchor = center-right
      image [set every repeat] = $itemLabelImages[4]
      pos = (0.775, -0.167)
      size = (0.08, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent scale
      image [set every repeat] = $scaleImage
      pos = (0, -0.4)
      size = (1.5, 0.16)
      startVal [time (s)] = 0.0
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    PolygonComponent line
      fillColor = black
      lineColor = black
      lineWidth = 0.5
      pos = (0.46, 0.41)
      shape = line
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent basketTitle
      color = black
      letterHeight = 0.035
      pos = (0.45, 0.45)
      startVal [time (s)] = 0.0
      text = Indkøbskurv
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    TextComponent nextButtonText_answer
      color = black
      letterHeight = 0.03
      pos = (-0.4, -0.15)
      startVal [time (s)] = 0.0
      text = Næste
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    PolygonComponent nextButton
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.4, -0.15)
      shape = rectangle
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent buttonTextA
      color = black
      letterHeight = 0.03
      pos = (-0.60, 0)
      startVal [time (s)] = 0.0
      text = A
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    TextComponent buttonTextB
      color = black
      letterHeight = 0.03
      pos = (-0.50, 0)
      startVal [time (s)] = 0.0
      text = B
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    TextComponent buttonTextC
      color = black
      letterHeight = 0.03
      pos = (-0.40, 0)
      startVal [time (s)] = 0.0
      text = C
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    TextComponent buttonTextD
      color = black
      letterHeight = 0.03
      pos = (-0.30, 0)
      startVal [time (s)] = 0.0
      text = D
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    TextComponent buttonTextE
      color = black
      letterHeight = 0.03
      pos = (-0.20, 0.0)
      startVal [time (s)] = 0.0
      text = E
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    PolygonComponent buttonA
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.6, 0.0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent buttonB
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.5, 0.0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent buttonC
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.4, 0.0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent buttonD
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.3, 0.0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent buttonE
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.2, 0.0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_answer
      clickable = $[buttonA, buttonB, buttonC, buttonD, buttonE, nextButton]
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine baselineRoutine
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Randomly select 5 items for the experimental trial
        random.shuffle(all_items)
        selected_items = all_items[:5]

        # Extract attributes from selected items
        itemImages = [item["itemImage"] for item in selected_items]
        itemNames = [item["item"] for item in selected_items]
        itemWeightsText = [item["itemWeight"] for item in selected_items]
        itemPrices = [item["price"] for item in selected_items]
        itemWeights = [float(item["weight"]) for item in selected_items]
        itemCO2 = [float(item["co2"]) for item in selected_items]
        itemLabels = [item["label"] for item in selected_items]
        itemLabelImages = [item["labelImage"] for item in selected_items]

        # Compute weighted CO₂ impact
        total_weight = sum(itemWeights)
        weighted_sum = sum(itemWeights[i] * itemCO2[i] for i in range(len(itemWeights)))
        weighted_average_co2 = weighted_sum / total_weight if total_weight > 0 else 0

        # Determine correct label
        if weighted_average_co2 <= 1.1:
            basket_label = "A"
        elif weighted_average_co2 <= 2.5:
            basket_label = "B"
        elif weighted_average_co2 <= 5:
            basket_label = "C"
        elif weighted_average_co2 <= 10:
            basket_label = "D"
        else:
            basket_label = "E"


        print(f"Baseline Trial {baselineLoop.thisN+1}/3: Selected Items: {itemNames}")
        print(f"Weighted CO₂: {weighted_average_co2}, Correct Label: {basket_label}")

        # left align text components
        instructionTextTrial_2.alignText = 'left'

        for text_component in [item1_name_2, item2_name_2, item3_name_2, item4_name_2, item5_name_2,
                               item1_weight_2, item2_weight_2, item3_weight_2, item4_weight_2, item5_weight_2]:
            text_component.alignText = 'left'

        for text_component in [item1_price_2, item2_price_2, item3_price_2, item4_price_2, item5_price_2]:
            text_component.alignText = 'right'
      End Routine:
        thisExp.addData("basketLabel", basket_label)
        thisExp.addData("weightedAverageCO2", weighted_average_co2)
        thisExp.addData("totalWeight", total_weight)
        thisExp.addData("trialType", "experimental")
        thisExp.addData("scaleUsed", scale_condition)
    TextComponent instructionTextTrial_2
      color = black
      letterHeight = 0.035
      pos = (-0.25, 0.355)
      startVal [time (s)] = 0.0
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      text:
        Hvad er kurvens gennemsnitlige Klimaaftryk?

        Svar med A, B, C, D eller E på tastaturet.
    ImageComponent item1_img_2
      anchor = top-right
      image [set every repeat] = $itemImages[0]
      pos = (0.19, 0.415)
      size = (0.09, 0.09)
      startVal [time (s)] = 0.0
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    ImageComponent item2_img_2
      anchor = top-right
      image [set every repeat] = $itemImages[1]
      pos = (0.19, 0.27)
      size = (0.09, 0.09)
      startVal [time (s)] = 0.0
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    ImageComponent item3_img_2
      anchor = top-right
      image [set every repeat] = $itemImages[2]
      pos = (0.19, 0.125)
      size = (0.09, 0.09)
      startVal [time (s)] = 0.0
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    ImageComponent item4_img_2
      anchor = top-right
      image [set every repeat] = $itemImages[3]
      pos = (0.19, -0.02)
      size = (0.09, 0.09)
      startVal [time (s)] = 0.0
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    ImageComponent item5_img_2
      anchor = top-right
      image [set every repeat] = $itemImages[4]
      pos = (0.19, -0.165)
      size = (0.09, 0.09)
      startVal [time (s)] = 0.0
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    TextComponent item1_name_2
      color = black
      letterHeight = 0.028
      pos = (0.72, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[0]
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    TextComponent item2_name_2
      color = black
      letterHeight = 0.028
      pos = (0.72, 0.255)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[1]
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    TextComponent item3_name_2
      color = black
      letterHeight = 0.028
      pos = (0.72, 0.11)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[2]
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    TextComponent item4_name_2
      color = black
      letterHeight = 0.028
      pos = (0.72, -0.035)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[3]
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    TextComponent item5_name_2
      color = black
      font = Liberation
      letterHeight = 0.028
      pos = (0.72, -0.18)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[4]
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    TextComponent item1_weight_2
      color = black
      letterHeight = 0.02
      pos = (0.72, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[0]
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    TextComponent item2_weight_2
      color = black
      letterHeight = 0.02
      pos = (0.72, 0.205)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[1]
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    TextComponent item3_weight_2
      color = black
      letterHeight = 0.02
      pos = (0.72, 0.06)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[2]
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    TextComponent item4_weight_2
      color = black
      letterHeight = 0.02
      pos = (0.72, -0.085)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[3]
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    TextComponent item5_weight_2
      color = black
      letterHeight = 0.02
      pos = (0.72, -0.23)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[4]
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    TextComponent item1_price_2
      color = black
      letterHeight = 0.028
      pos = (0.155, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[0]
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    TextComponent item2_price_2
      color = black
      letterHeight = 0.028
      pos = (0.155, 0.255)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[1]
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    TextComponent item3_price_2
      color = black
      letterHeight = 0.028
      pos = (0.155, 0.11)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[2]
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    TextComponent item4_price_2
      color = black
      letterHeight = 0.028
      pos = (0.155, -0.035)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[3]
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    TextComponent item5_price_2
      color = black
      letterHeight = 0.028
      pos = (0.155, -0.18)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[4]
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    ImageComponent item1_label_2
      anchor = top-right
      image [set every repeat] = $itemLabelImages[0]
      pos = (0.775, 0.39)
      size = (0.08, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent item2_label_2
      anchor = top-right
      image [set every repeat] = $itemLabelImages[1]
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
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      pos:
        (0.775, 0.26)
    ImageComponent item3_label_2
      anchor = top-right
      image [set every repeat] = $itemLabelImages[2]
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
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      pos:
        (0.775, 0.11)
    ImageComponent item4_label_2
      anchor = top-right
      image [set every repeat] = $itemLabelImages[3]
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
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      pos:
        (0.775, -0.04)
    ImageComponent item5_label_2
      anchor = top-right
      image [set every repeat] = $itemLabelImages[4]
      pos = (0.775, -0.18)
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'a','b','c','d','e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent
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    CodeComponent code_6
      Code Type = Both
      Begin JS Routine:
        consentText.setAlignHoriz("left");
      Begin Routine:
        consentText.alignText = 'left'
    TextComponent consentText
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Du deltager i dette online studie, som er udarbejdet af Sille Hasselbalch Markussen i forbindelse med sit speciale i Cognitive Science. Studiet varer ca. XX minutter, og dine svar behandles anonymt og fortroligt i overensstemmelse med databeskyttelsesforordningen.

        Hvis du har spørgsmål om studiet eller behandlingen af dine data, kan du kontakte Sille Hasselbalch Markussen, 202006969@post.au.dk.
        Din deltagelse er helt frivillig, og du kan til enhver tid trække dit samtykke tilbage uden konsekvenser.

        Ved at fortsætte i eksperimentet bekræfter du, at du har læst og forstået denne erklæring, og at du giver dit samtykke til at deltage.

        Hvis du ikke ønsker at samtykke, kan du lukke vinduet for at forlade eksperimentet.
    TextComponent nextButtonTextConsent
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Næste
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    PolygonComponent nextButtonRectConsent
      lineColor = grey
      lineWidth = 0.9
      pos = (0, -0.35)
      shape = rectangle
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouseConsent
      clickable = $[nextButtonTextConsent, nextButtonRectConsent]
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine certaintyRoutine
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        # Only allow routine to end if a rating has been selected
        if certaintySlider.getRating() is not None:
            if mouse.isPressedIn(nextButtonText) or mouse.isPressedIn(nextButtonRectangle):
                continueRoutine = False
    TextComponent text_3
      color = black
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Hvor sikker er du på dit svar?

        Angiv dit svar ved at klikke på skalaen.
    SliderComponent certaintySlider
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = ["Usikker", "", "", "", "", "", "Sikker"]
      letterHeight = 0.025
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.7, 0.03)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent nextButtonText
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Næste
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    PolygonComponent nextButtonRectangle
      lineColor = grey
      lineWidth = 0.9
      pos = (0, -0.35)
      shape = rectangle
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = $[nextButtonText, nextButtonRectangle]
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine backgroundRoutine
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    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        text_2.setAlignHoriz("left");
      Begin Routine:
        text_2.alignText = 'left'
    TextComponent text_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Velkommen til undersøgelsen!

        I dette eksperiment vil du blive præsenteret for indkøbskurve med fem dagligvarer. Disse varer vil være mærket med et klimamærke, der viser den gennemsnitlige klimabelastning for de forskellige fødevarer.

        Mærket går fra A (lav CO₂-udledning) til E (høj CO₂-udledning), baseret på hvor mange kg CO₂ der udledes pr. kg af varen.

        Klik på "Næste" for at komme til instruktionerne.
    TextComponent nextButtonTextInstruct_2
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Næste
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    PolygonComponent nextButtonRectInstruct_2
      lineColor = grey
      lineWidth = 0.9
      pos = (0, -0.35)
      shape = rectangle
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouseIntruct_2
      clickable = $[nextButtonTextInstruct, nextButtonRectInstruct]
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine baselineTrialRoutine
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    CodeComponent code_7
      Code Type = Both
      Begin JS Routine:
        selected_items = all_items
          .map(value => ({ value, sort: Math.random() }))
          .sort((a, b) => a.sort - b.sort)
          .map(({ value }) => value)
          .slice(0, 5);

        // Extract attributes
        itemImages = selected_items.map(item => item["itemImage"]);
        itemNames = selected_items.map(item => item["item"]);
        itemWeightsText = selected_items.map(item => item["itemWeight"]);
        itemPrices = selected_items.map(item => item["price"]);
        itemWeights = selected_items.map(item => parseFloat(item["weight"]));
        itemCO2 = selected_items.map(item => parseFloat(item["co2"]));
        itemLabelImages = selected_items.map(item => item["labelImage"]);

        // Compute weighted CO₂
        total_weight = 0;
        weighted_sum = 0;
        for (let i = 0; i < itemWeights.length; i++) {
            total_weight += itemWeights[i];
            weighted_sum += itemWeights[i] * itemCO2[i];
        }
        weighted_average_co2 = (total_weight > 0) ? (weighted_sum / total_weight) : 0;

        // Determine correct climate label
        if (weighted_average_co2 <= 1.1) {
            basket_label = "A";
        } else if (weighted_average_co2 <= 2.5) {
            basket_label = "B";
        } else if (weighted_average_co2 <= 5) {
            basket_label = "C";
        } else if (weighted_average_co2 <= 10) {
            basket_label = "D";
        } else {
            basket_label = "E";
        }

        // Align text: left
        let leftText = [item1_name_b, item2_name_b, item3_name_b, item4_name_b, item5_name_b,
                        item1_weight_b, item2_weight_b, item3_weight_b, item4_weight_b, item5_weight_b];
        for (let i = 0; i < leftText.length; i++) {
            leftText[i].alignText = "left";
        }

        // Align text: right
        let rightText = [item1_price_b, item2_price_b, item3_price_b, item4_price_b, item5_price_b];
        for (let i = 0; i < rightText.length; i++) {
            rightText[i].alignText = "right";
        }

        // Reset button styles
        selectedAnswer = null;
        buttons = [buttonTextA_b, buttonTextB_b, buttonTextC_b, buttonTextD_b, buttonTextE_b];
        for (let i = 0; i < buttons.length; i++) {
            buttons[i].color = "black";
        }

        // Start clock
        if (typeof responseClock === 'undefined') {
            responseClock = new util.Clock();
        } else {
            responseClock.reset();
        }
        responseRT = null;
      Begin Routine:
        import random
        # Draw 5 random items
        selected_items = random.sample(all_items, 5)

        # Extract attributes
        itemImages = [item["itemImage"] for item in selected_items]
        itemNames = [item["item"] for item in selected_items]
        itemWeightsText = [item["itemWeight"] for item in selected_items]
        itemPrices = [item["price"] for item in selected_items]
        itemWeights = [float(item["weight"]) for item in selected_items]
        itemCO2 = [float(item["co2"]) for item in selected_items]
        itemLabelImages = [item["labelImage"] for item in selected_items]


        # Compute CO₂ impact
        total_weight = sum(itemWeights)
        weighted_sum = sum(itemWeights[i] * itemCO2[i] for i in range(5))
        weighted_average_co2 = weighted_sum / total_weight if total_weight > 0 else 0

        # Assign label
        if weighted_average_co2 <= 1.1:
            basket_label = "A"
        elif weighted_average_co2 <= 2.5:
            basket_label = "B"
        elif weighted_average_co2 <= 5:
            basket_label = "C"
        elif weighted_average_co2 <= 10:
            basket_label = "D"
        else:
            basket_label = "E"

        # Align text
        for text_component in [item1_name_b, item2_name_b, item3_name_b, item4_name_b, item5_name_b,
                               item1_weight_b, item2_weight_b, item3_weight_b, item4_weight_b, item5_weight_b]:
            text_component.alignText = 'left'

        for text_component in [item1_price_b, item2_price_b, item3_price_b, item4_price_b, item5_price_b]:
            text_component.alignText = 'right'


        # Reset all button styles
        selectedAnswer = None
        buttons = [buttonTextA_b, buttonTextB_b, buttonTextC_b, buttonTextD_b, buttonTextE_b]
        for btn in buttons:
            btn.color = 'black'

        responseClock = core.Clock()
        responseRT = None
      Each Frame:
        # Button list and labels
        boxes = [buttonA_b, buttonB_b, buttonC_b, buttonD_b, buttonE_b]
        buttons = [buttonTextA_b, buttonTextB_b, buttonTextC_b, buttonTextD_b, buttonTextE_b]
        labels = ["A", "B", "C", "D", "E"]

        # Check if any box OR its corresponding text is clicked
        for i in range(len(buttons)):
            if mouse.isPressedIn(buttons[i]) or mouse.isPressedIn(boxes[i]):
                selectedAnswer = labels[i]

                # Reset all text colors
                for btn in buttons:
                    btn.color = 'black'

                # Highlight only the selected text
                buttons[i].color = '#b30734'

        # Allow "Next" only after selection
        if selectedAnswer is not None:
            if mouse.isPressedIn(nextButton_b):
                continueRoutine = False

        # Track RT
        if selectedAnswer is not None:
            if mouse.isPressedIn(nextButton_b):
                responseRT = responseClock.getTime()
                continueRoutine = False
      Each JS Frame:
        boxes = [buttonA_b, buttonB_b, buttonC_b, buttonD_b, buttonE_b];
        buttons = [buttonTextA_b, buttonTextB_b, buttonTextC_b, buttonTextD_b, buttonTextE_b];
        labels = ["A", "B", "C", "D", "E"];
        for (var i, _pj_c = 0, _pj_a = util.range(buttons.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            if ((mouse.isPressedIn(buttons[i]) || mouse.isPressedIn(boxes[i]))) {
                selectedAnswer = labels[i];
                for (var btn, _pj_f = 0, _pj_d = buttons, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                    btn = _pj_d[_pj_f];
                    btn.color = "black";
                }
                buttons[i].color = "#b30734";
            }
        }
        if ((selectedAnswer !== null)) {
            if (mouse.isPressedIn(nextButton_b)) {
                continueRoutine = false;
            }
        }

        if (selectedAnswer !== null && mouse.isPressedIn(nextButton)) {
            responseRT = responseClock.getTime();
            psychoJS.experiment.addData('responseRT', responseRT);
            continueRoutine = false;
        }
      End JS Routine:
        item_list = function () {
            var _pj_a = [], _pj_b = selected_items;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var item = _pj_b[_pj_c];
                _pj_a.push(item["item"]);
            }
            return _pj_a;
        }
        .call(this);
        item_string = item_list.join(", ");
        psychoJS.experiment.addData("items", item_string);
        psychoJS.experiment.addData("avg_co2", weighted_average_co2);
        psychoJS.experiment.addData("basketLabel", basket_label);
        psychoJS.experiment.addData("response", selectedAnswer);
        psychoJS.experiment.addData("responseRT", responseRT);
        is_correct = Number.parseInt((selectedAnswer === basket_label));
        psychoJS.experiment.addData("is_correct", is_correct);
        psychoJS.experiment.addData("trialType", "baseline");
        psychoJS.experiment.addData("scaleUsed", "");
      End Routine:
        # Save selected items as comma-separated list
        item_list = [item["item"] for item in selected_items]
        item_string = ", ".join(item_list)
        thisExp.addData("items", item_string)

        # Save average CO₂ score (you already calculated this)
        thisExp.addData("avg_co2", weighted_average_co2)

        # Save bakset label
        thisExp.addData("basketLabel", basket_label)

        # Save participant's selected label
        thisExp.addData("response", selectedAnswer)

        # Save reaction time
        thisExp.addData("responseRT", responseRT)

        # Save whether the response was correct
        is_correct = int(selectedAnswer == basket_label)
        thisExp.addData("is_correct", is_correct)

        # Save trial type and condition
        thisExp.addData("trialType", "experimental")
        thisExp.addData("scaleUsed", scale_condition)
    TextComponent instructionTextTrial_b
      color = black
      letterHeight = 0.03
      pos = (-0.40, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Hvad er kurvens gennemsnitlige klimaaftryk? 
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    ImageComponent item1_img_b
      anchor = top-right
      image [set every repeat] = $itemImages[0]
      pos = (0.215, 0.378)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent item2_img_b
      anchor = top-right
      image [set every repeat] = $itemImages[1]
      pos = (0.215, 0.2455)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent item3_img_b
      anchor = top-right
      image [set every repeat] = $itemImages[2]
      pos = (0.215, 0.113)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent item4_img_b
      anchor = top-right
      image [set every repeat] = $itemImages[3]
      pos = (0.215, -0.0195)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent item5_img_b
      anchor = top-right
      image [set every repeat] = $itemImages[4]
      pos = (0.215, -0.152)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent item1_name_b
      color = black
      letterHeight = 0.028
      pos = (0.735, 0.37)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[0]
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    TextComponent item2_name_b
      color = black
      letterHeight = 0.028
      pos = (0.735, 0.2375)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[1]
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    TextComponent item3_name_b
      color = black
      letterHeight = 0.028
      pos = (0.735, 0.105)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[2]
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    TextComponent item4_name_b
      color = black
      letterHeight = 0.028
      pos = (0.735, -0.0275)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[3]
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    TextComponent item5_name_b
      color = black
      letterHeight = 0.028
      pos = (0.735, -0.16)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[4]
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    TextComponent item1_weight_b
      color = black
      letterHeight = 0.025
      pos = (0.735, 0.32)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[0]
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    TextComponent item2_weight_b
      color = black
      letterHeight = 0.025
      pos = (0.735, 0.1875)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[1]
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    TextComponent item3_weight_b
      color = black
      letterHeight = 0.025
      pos = (0.735, 0.055)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[2]
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    TextComponent item4_weight_b
      color = black
      letterHeight = 0.025
      pos = (0.735, -0.0775)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[3]
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    TextComponent item5_weight_b
      color = black
      letterHeight = 0.025
      pos = (0.735, -0.21)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[4]
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    TextComponent item1_price_b
      color = black
      letterHeight = 0.028
      pos = (0.152, 0.37)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[0]
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    TextComponent item2_price_b
      color = black
      letterHeight = 0.028
      pos = (0.152, 0.2375)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[1]
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    TextComponent item3_price_b
      color = black
      letterHeight = 0.028
      pos = (0.155, 0.105)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[2]
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    TextComponent item4_price_b
      color = black
      letterHeight = 0.028
      pos = (0.155, -0.0275)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[3]
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    TextComponent item5_price_b
      color = black
      letterHeight = 0.028
      pos = (0.155, -0.16)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[4]
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    ImageComponent item1_label_b
      anchor = center-right
      image [set every repeat] = $itemLabelImages[0]
      pos = (0.775, 0.365)
      size = (0.08, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent item2_label_b
      anchor = center-right
      image [set every repeat] = $itemLabelImages[1]
      size = (0.08, 0.04)
      startVal [time (s)] = 0.0
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      pos:
        (0.775, 0.2325)
    ImageComponent item3_label_b
      anchor = center-right
      image [set every repeat] = $itemLabelImages[2]
      size = (0.08, 0.04)
      startVal [time (s)] = 0.0
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      pos:
        (0.775, 0.112)
    ImageComponent item4_label_b
      anchor = center-right
      image [set every repeat] = $itemLabelImages[3]
      size = (0.08, 0.04)
      startVal [time (s)] = 0.0
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      pos:
        (0.775, -0.0345)
    ImageComponent item5_label_b
      anchor = center-right
      image [set every repeat] = $itemLabelImages[4]
      pos = (0.775, -0.167)
      size = (0.08, 0.04)
      startVal [time (s)] = 0.0
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    PolygonComponent line_2
      fillColor = black
      lineColor = black
      lineWidth = 0.5
      pos = (0.46, 0.41)
      shape = line
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent basketTitle_2
      color = black
      letterHeight = 0.035
      pos = (0.45, 0.45)
      startVal [time (s)] = 0.0
      text = Indkøbskurv
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    TextComponent nextButtonText_answer_b
      color = black
      letterHeight = 0.03
      pos = (-0.4, -0.15)
      startVal [time (s)] = 0.0
      text = Næste
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    PolygonComponent nextButton_b
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.4, -0.15)
      shape = rectangle
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent buttonTextA_b
      color = black
      letterHeight = 0.03
      pos = (-0.60, 0)
      startVal [time (s)] = 0.0
      text = A
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    TextComponent buttonTextB_b
      color = black
      letterHeight = 0.03
      pos = (-0.50, 0)
      startVal [time (s)] = 0.0
      text = B
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    TextComponent buttonTextC_b
      color = black
      letterHeight = 0.03
      pos = (-0.40, 0)
      startVal [time (s)] = 0.0
      text = C
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    TextComponent buttonTextD_b
      color = black
      letterHeight = 0.03
      pos = (-0.30, 0)
      startVal [time (s)] = 0.0
      text = D
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    TextComponent buttonTextE_b
      color = black
      letterHeight = 0.03
      pos = (-0.20, 0.0)
      startVal [time (s)] = 0.0
      text = E
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    PolygonComponent buttonA_b
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.6, 0.0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent buttonB_b
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.5, 0.0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent buttonC_b
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.4, 0.0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent buttonD_b
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.3, 0.0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent buttonE_b
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.2, 0.0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_answer_2
      clickable = $[buttonA, buttonB, buttonC, buttonD, buttonE, nextButton]
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine certaintyRoutineBaseline
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    CodeComponent code_8
      Code Type = Auto->JS
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      Each Frame:
        # Only allow routine to end if a rating has been selected
        if certaintySlider.getRating() is not None:
            if mouse.isPressedIn(nextButtonText_b) or mouse.isPressedIn(nextButtonRectangle_b):
                continueRoutine = False
    TextComponent text_4
      color = black
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Hvor sikker er du på dit svar?

        Angiv dit svar ved at klikke på skalaen.
    SliderComponent certaintySlider_2
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = ["Usikker", "", "", "", "", "", "Sikker"]
      letterHeight = 0.025
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.7, 0.03)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent nextButtonText_2
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Næste
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    PolygonComponent nextButtonRectangle_2
      lineColor = grey
      lineWidth = 0.9
      pos = (0, -0.35)
      shape = rectangle
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = $[nextButtonText, nextButtonRectangle]
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine debriefRoutine
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        debriefText.alignText = 'left'
    TextComponent debriefText
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Tak for din deltagelse!


        Du har nu gennemført forsøget. Jeg takker dig for at have taget dig tid til at deltage – din indsats bidrager med vigtige indsigter i, hvordan forbrugere opfatter og forstår klimamærkning af fødevarer.



        Hvis du har spørgsmål til forsøget eller formålet med undersøgelsen, er du velkommen til at kontakte mig.



        Når du er klar, kan du afslutte forsøget ved at klikke på knappen "Afslut".
    TextComponent afslutButtonText
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Afslut
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    PolygonComponent afslutButton
      lineColor = grey
      lineWidth = 0.9
      pos = (0, -0.35)
      shape = rectangle
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouseDebrief
      clickable = $[afslutButtonText, afslutButton]
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine beforeBaselineRoutine
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        text_5.alignText = 'left'
    TextComponent text_5
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Du har nu udført øvelsesrunderne og skal nu til eksperimentet.

        Klik på "Næste", når du er klar til at starte eksperimentet.
    TextComponent nextButtonTextInstruct_3
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Næste
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    PolygonComponent nextButtonRectInstruct_3
      lineColor = grey
      lineWidth = 0.9
      pos = (0, -0.35)
      shape = rectangle
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouseIntruct_3
      clickable = $[nextButtonTextInstruct_3, nextButtonRectInstruct_3]
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine testTrialRoutine
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    CodeComponent code_11
      Code Type = Both
      Begin JS Routine:
        selected_items = all_items
          .map(value => ({ value, sort: Math.random() }))
          .sort((a, b) => a.sort - b.sort)
          .map(({ value }) => value)
          .slice(0, 5);

        // Extract attributes
        itemImages = selected_items.map(item => item["itemImage"]);
        itemNames = selected_items.map(item => item["item"]);
        itemWeightsText = selected_items.map(item => item["itemWeight"]);
        itemPrices = selected_items.map(item => item["price"]);
        itemWeights = selected_items.map(item => parseFloat(item["weight"]));
        itemCO2 = selected_items.map(item => parseFloat(item["co2"]));
        itemLabelImages = selected_items.map(item => item["labelImage"]);

        // Compute CO₂ impact
        total_weight = 0;
        weighted_sum = 0;
        for (let i = 0; i < itemWeights.length; i++) {
            total_weight += itemWeights[i];
            weighted_sum += itemWeights[i] * itemCO2[i];
        }
        weighted_average_co2 = (total_weight > 0) ? (weighted_sum / total_weight) : 0;

        // Assign label
        if (weighted_average_co2 <= 1.1) {
            basket_label = "A";
        } else if (weighted_average_co2 <= 2.5) {
            basket_label = "B";
        } else if (weighted_average_co2 <= 5) {
            basket_label = "C";
        } else if (weighted_average_co2 <= 10) {
            basket_label = "D";
        } else {
            basket_label = "E";
        }

        // Align text
        // Align text (left for names & weights)
        [
            item1_name_t, item2_name_t, item3_name_t, item4_name_t, item5_name_t,
            item1_weight_t, item2_weight_t, item3_weight_t, item4_weight_t, item5_weight_t
        ].forEach(txt => {
            txt.setAlignHoriz("left");
        });

        // Align text (right for prices)
        [
            item1_price_t, item2_price_t, item3_price_t, item4_price_t, item5_price_t
        ].forEach(txt => {
            txt.setAlignHoriz("right");
        });

        // Reset button styles
        selectedAnswer = null;
        buttons = [buttonTextA_t, buttonTextB_t, buttonTextC_t, buttonTextD_t, buttonTextE_t];
        for (let i = 0; i < buttons.length; i++) {
            buttons[i].color = "black";
        }

        // Start clock
        if (typeof responseClock === 'undefined') {
            responseClock = new util.Clock();
        } else {
            responseClock.reset();
        }
        responseRT = null;
      Begin Routine:
        import random
        selected_items = random.sample(all_items, 5)


        # Extract attributes
        itemImages = [item["itemImage"] for item in selected_items]
        itemNames = [item["item"] for item in selected_items]
        itemWeightsText = [item["itemWeight"] for item in selected_items]
        itemPrices = [item["price"] for item in selected_items]
        itemWeights = [float(item["weight"]) for item in selected_items]
        itemCO2 = [float(item["co2"]) for item in selected_items]
        itemLabelImages = [item["labelImage"] for item in selected_items]

        # Compute CO₂ impact
        total_weight = sum(itemWeights)
        weighted_sum = sum(itemWeights[i] * itemCO2[i] for i in range(5))
        weighted_average_co2 = weighted_sum / total_weight if total_weight > 0 else 0

        # Assign label
        if weighted_average_co2 <= 1.1:
            basket_label = "A"
        elif weighted_average_co2 <= 2.5:
            basket_label = "B"
        elif weighted_average_co2 <= 5:
            basket_label = "C"
        elif weighted_average_co2 <= 10:
            basket_label = "D"
        else:
            basket_label = "E"

        # Align text
        for text_component in [item1_name_t, item2_name_t, item3_name_t, item4_name_t, item5_name_t,
                               item1_weight_t, item2_weight_t, item3_weight_t, item4_weight_t, item5_weight_t]:
            text_component.alignText = 'left'

        for text_component in [item1_price_t, item2_price_t, item3_price_t, item4_price_t, item5_price_t]:
            text_component.alignText = 'right'


        # Reset all button styles
        selectedAnswer = None
        buttons = [buttonTextA_t, buttonTextB_t, buttonTextC_t, buttonTextD_t, buttonTextE_t]
        for btn in buttons:
            btn.color = 'black'

        responseClock = core.Clock()
        responseRT = None
      Each Frame:
        # Button list and labels
        boxes = [buttonA_t, buttonB_t, buttonC_t, buttonD_t, buttonE_t]
        buttons = [buttonTextA_t, buttonTextB_t, buttonTextC_t, buttonTextD_t, buttonTextE_t]
        labels = ["A", "B", "C", "D", "E"]

        # Check if any box OR its corresponding text is clicked
        for i in range(len(buttons)):
            if mouse.isPressedIn(buttons[i]) or mouse.isPressedIn(boxes[i]):
                selectedAnswer = labels[i]

                # Reset all text colors
                for btn in buttons:
                    btn.color = 'black'

                # Highlight only the selected text
                buttons[i].color = '#b30734'

        # Allow "Next" only after selection
        if selectedAnswer is not None:
            if mouse.isPressedIn(nextButton_t):
                continueRoutine = False

        # Track RT
        if selectedAnswer is not None:
            if mouse.isPressedIn(nextButton_t):
                responseRT = responseClock.getTime()
                continueRoutine = False
      Each JS Frame:
        boxes = [buttonA_t, buttonB_t, buttonC_t, buttonD_t, buttonE_t];
        buttons = [buttonTextA_t, buttonTextB_t, buttonTextC_t, buttonTextD_t, buttonTextE_t];
        labels = ["A", "B", "C", "D", "E"];
        for (var i, _pj_c = 0, _pj_a = util.range(buttons.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            if ((mouse.isPressedIn(buttons[i]) || mouse.isPressedIn(boxes[i]))) {
                selectedAnswer = labels[i];
                for (var btn, _pj_f = 0, _pj_d = buttons, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                    btn = _pj_d[_pj_f];
                    btn.color = "black";
                }
                buttons[i].color = "#b30734";
            }
        }
        if ((selectedAnswer !== null)) {
            if (mouse.isPressedIn(nextButton_t)) {
                continueRoutine = false;
            }
        }

        if (selectedAnswer !== null && mouse.isPressedIn(nextButton)) {
            responseRT = responseClock.getTime();
            psychoJS.experiment.addData('responseRT', responseRT);
            continueRoutine = false;
        }
      End JS Routine:
        item_list = function () {
            var _pj_a = [], _pj_b = selected_items;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var item = _pj_b[_pj_c];
                _pj_a.push(item["item"]);
            }
            return _pj_a;
        }
        .call(this);
        item_string = item_list.join(", ");
        psychoJS.experiment.addData("items", item_string);
        psychoJS.experiment.addData("avg_co2", weighted_average_co2);
        psychoJS.experiment.addData("basketLabel", basket_label);
        psychoJS.experiment.addData("response", selectedAnswer);
        psychoJS.experiment.addData("responseRT", responseRT);
        is_correct = Number.parseInt((selectedAnswer === basket_label));
        psychoJS.experiment.addData("is_correct", is_correct);
        psychoJS.experiment.addData("trialType", "test");
        psychoJS.experiment.addData("scaleUsed", "");
      End Routine:
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    TextComponent instructionTextTrial_t
      color = black
      letterHeight = 0.03
      pos = (-0.40, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Hvad er kurvens gennemsnitlige klimaaftryk? 
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    ImageComponent item1_img_t
      anchor = top-right
      image [set every repeat] = $itemImages[0]
      pos = (0.215, 0.378)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent item2_img_t
      anchor = top-right
      image [set every repeat] = $itemImages[1]
      pos = (0.215, 0.2455)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent item3_img_t
      anchor = top-right
      image [set every repeat] = $itemImages[2]
      pos = (0.215, 0.113)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent item4_img_t
      anchor = top-right
      image [set every repeat] = $itemImages[3]
      pos = (0.215, -0.0195)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent item5_img_t
      anchor = top-right
      image [set every repeat] = $itemImages[4]
      pos = (0.215, -0.152)
      saveStartStop = False
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent item1_name_t
      color = black
      letterHeight = 0.028
      pos = (0.735, 0.37)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[0]
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    TextComponent item2_name_t
      color = black
      letterHeight = 0.028
      pos = (0.735, 0.2375)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[1]
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    TextComponent item3_name_t
      color = black
      letterHeight = 0.028
      pos = (0.735, 0.105)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[2]
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    TextComponent item4_name_t
      color = black
      letterHeight = 0.028
      pos = (0.735, -0.0275)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[3]
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    TextComponent item5_name_t
      color = black
      letterHeight = 0.028
      pos = (0.735, -0.16)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemNames[4]
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    TextComponent item1_weight_t
      color = black
      letterHeight = 0.025
      pos = (0.735, 0.32)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[0]
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    TextComponent item2_weight_t
      color = black
      letterHeight = 0.025
      pos = (0.735, 0.1875)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[1]
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    TextComponent item3_weight_t
      color = black
      letterHeight = 0.025
      pos = (0.735, 0.055)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[2]
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    TextComponent item4_weight_t
      color = black
      letterHeight = 0.025
      pos = (0.735, -0.0775)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[3]
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    TextComponent item5_weight_t
      color = black
      letterHeight = 0.025
      pos = (0.735, -0.21)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemWeightsText[4]
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    TextComponent item1_price_t
      color = black
      letterHeight = 0.028
      pos = (0.152, 0.37)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[0]
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    TextComponent item2_price_t
      color = black
      letterHeight = 0.028
      pos = (0.152, 0.2375)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[1]
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    TextComponent item3_price_t
      color = black
      letterHeight = 0.028
      pos = (0.155, 0.105)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[2]
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    TextComponent item4_price_t
      color = black
      letterHeight = 0.028
      pos = (0.155, -0.0275)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[3]
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    TextComponent item5_price_t
      color = black
      letterHeight = 0.028
      pos = (0.155, -0.16)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemPrices[4]
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    ImageComponent item1_label_t
      anchor = center-right
      image [set every repeat] = $itemLabelImages[0]
      pos = (0.775, 0.365)
      size = (0.08, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent item2_label_t
      anchor = center-right
      image [set every repeat] = $itemLabelImages[1]
      size = (0.08, 0.04)
      startVal [time (s)] = 0.0
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      pos:
        (0.775, 0.2325)
    ImageComponent item3_label_t
      anchor = center-right
      image [set every repeat] = $itemLabelImages[2]
      size = (0.08, 0.04)
      startVal [time (s)] = 0.0
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      pos:
        (0.775, 0.112)
    ImageComponent item4_label_t
      anchor = center-right
      image [set every repeat] = $itemLabelImages[3]
      size = (0.08, 0.04)
      startVal [time (s)] = 0.0
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      pos:
        (0.775, -0.0345)
    ImageComponent item5_label_t
      anchor = center-right
      image [set every repeat] = $itemLabelImages[4]
      pos = (0.775, -0.167)
      size = (0.08, 0.04)
      startVal [time (s)] = 0.0
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    PolygonComponent line_3
      fillColor = black
      lineColor = black
      lineWidth = 0.5
      ori = 90
      pos = (0.46, 0.41)
      shape = line
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent basketTitle_3
      color = black
      letterHeight = 0.035
      pos = (0.45, 0.45)
      startVal [time (s)] = 0.0
      text = Indkøbskurv
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    TextComponent nextButtonText_answer_t
      color = black
      letterHeight = 0.03
      pos = (-0.4, -0.15)
      startVal [time (s)] = 0.0
      text = Næste
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    PolygonComponent nextButton_t
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.4, -0.15)
      shape = rectangle
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent buttonTextA_t
      color = black
      letterHeight = 0.03
      pos = (-0.60, 0)
      startVal [time (s)] = 0.0
      text = A
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    TextComponent buttonTextB_t
      color = black
      letterHeight = 0.03
      pos = (-0.50, 0)
      startVal [time (s)] = 0.0
      text = B
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    TextComponent buttonTextC_t
      color = black
      letterHeight = 0.03
      pos = (-0.40, 0)
      startVal [time (s)] = 0.0
      text = C
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    TextComponent buttonTextD_t
      color = black
      letterHeight = 0.03
      pos = (-0.30, 0)
      startVal [time (s)] = 0.0
      text = D
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    TextComponent buttonTextE_t
      color = black
      letterHeight = 0.03
      pos = (-0.20, 0.0)
      startVal [time (s)] = 0.0
      text = E
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    PolygonComponent buttonA_t
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.6, 0.0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent buttonB_t
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.5, 0.0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent buttonC_t
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.4, 0.0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent buttonD_t
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.3, 0.0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent buttonE_t
      lineColor = grey
      lineWidth = 0.9
      pos = (-0.2, 0.0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_answer_3
      clickable = $[buttonA_t, buttonB_t, buttonC_t, buttonD_t, buttonE_t, nextButton_t]
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine loadItemsRoutine
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    CodeComponent code_12
      Code Type = Both
      Begin Experiment:
        # Randomly assign participant to one of three scale conditions
        scale_condition = random.choice(["labels", "original", "linear"])
        thisExp.addData("assignedCondition", scale_condition)  # Save condition

        # Store the correct scale image based on condition
        if scale_condition == "labels":
            scaleImage = "scales/scale_labels.png"
        elif scale_condition == "original":
            scaleImage = "scales/scale_original.png"
        else:
            scaleImage = "scales/scale_linear.png"
      Begin JS Experiment:
        // Define scale options
        //const scaleOptions = [
        //  { name: "labels", image: "scales/scale_labels.png" },
        //  { name: "original", image: "scales/scale_original.png" },
        //  { name: "linear", image: "scales/scale_linear.png" }
        //];

        // Randomly pick one condition
        //const picked = scaleOptions[Math.floor(Math.random() * scaleOptions.length)];

        // Store values globally
        //scale_condition = picked.name;
        //scaleImage = picked.image;

        // Log condition in data
        //psychoJS.experiment.addData("assignedCondition", scale_condition);
      Begin JS Routine:
        all_items = loadItemsLoop.trialList.slice();  // copy the list so we can shuffle it
      Begin Routine:
        all_items = loadItemsLoop.trialList  # loadItemsLoop gives access to the list of dicts
  Routine assignCondition
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Flow
  LoopInitiator loadItemsLoop loopType="TrialHandler"
    conditionsFile = items.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('item', 'Peberfrugt'), ('itemImage', 'images/peberfrugt.png'), ('itemWeight', '1 stk'), ('weight', 0.2), ('co2', 1.07), ('label', 'A'), ('labelImage', 'images/label_A.png'), ('price', 8.0)]),
      OrderedDict([('item', 'Flåede tomater'), ('itemImage', 'images/flaaet_tomat.png'), ('itemWeight', '400 g'), ('weight', 0.4), ('co2', 1.06), ('label', 'A'), ('labelImage', 'images/label_A.png'), ('price', 9.5)]),
      OrderedDict([('item', 'Æg'), ('itemImage', 'images/aeg.png'), ('itemWeight', '10 stk'), ('weight', 0.5), ('co2', 0.97), ('label', 'A'), ('labelImage', 'images/label_A.png'), ('price', 20.0)]),
      OrderedDict([('item', 'Banan'), ('itemImage', 'images/banan.png'), ('itemWeight', '1 stk'), ('weight', 0.1), ('co2', 0.85), ('label', 'A'), ('labelImage', 'images/label_A.png'), ('price', 2.75)]),
      OrderedDict([('item', 'Æbler'), ('itemImage', 'images/aeble.png'), ('itemWeight', '1 kg'), ('weight', 1.0), ('co2', 0.61), ('label', 'A'), ('labelImage', 'images/label_A.png'), ('price', 25.0)]),
      OrderedDict([('item', 'Letmælk'), ('itemImage', 'images/letmaelk.png'), ('itemWeight', '1 L'), ('weight', 1.0), ('co2', 0.45), ('label', 'A'), ('labelImage', 'images/label_A.png'), ('price', 15.0)]),
      OrderedDict([('item', 'Kartofler'), ('itemImage', 'images/kartoffel.png'), ('itemWeight', '1 kg'), ('weight', 1.0), ('co2', 0.41), ('label', 'A'), ('labelImage', 'images/label_A.png'), ('price', 18.0)])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
    Routine loadItemsRoutine
  LoopTerminator loadItemsLoop
  Routine consent
  Routine backgroundRoutine
  Routine instructionsRoutine
  LoopInitiator testTrials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('item', 'Peberfrugt'), ('itemImage', 'images/peberfrugt.png'), ('itemWeight', '1 stk'), ('weight', 0.2), ('co2', 1.07), ('label', 'A'), ('labelImage', 'images/label_A.png'), ('price', 8.0)]),
      OrderedDict([('item', 'Flåede tomater'), ('itemImage', 'images/flaaet_tomat.png'), ('itemWeight', '400 g'), ('weight', 0.4), ('co2', 1.06), ('label', 'A'), ('labelImage', 'images/label_A.png'), ('price', 9.5)]),
      OrderedDict([('item', 'Æg'), ('itemImage', 'images/aeg.png'), ('itemWeight', '10 stk'), ('weight', 0.5), ('co2', 0.97), ('label', 'A'), ('labelImage', 'images/label_A.png'), ('price', 20.0)]),
      OrderedDict([('item', 'Banan'), ('itemImage', 'images/banan.png'), ('itemWeight', '1 stk'), ('weight', 0.1), ('co2', 0.85), ('label', 'A'), ('labelImage', 'images/label_A.png'), ('price', 2.75)]),
      OrderedDict([('item', 'Æbler'), ('itemImage', 'images/aeble.png'), ('itemWeight', '1 kg'), ('weight', 1.0), ('co2', 0.61), ('label', 'A'), ('labelImage', 'images/label_A.png'), ('price', 25.0)]),
      OrderedDict([('item', 'Letmælk'), ('itemImage', 'images/letmaelk.png'), ('itemWeight', '1 L'), ('weight', 1.0), ('co2', 0.45), ('label', 'A'), ('labelImage', 'images/label_A.png'), ('price', 15.0)]),
      OrderedDict([('item', 'Kartofler'), ('itemImage', 'images/kartoffel.png'), ('itemWeight', '1 kg'), ('weight', 1.0), ('co2', 0.41), ('label', 'A'), ('labelImage', 'images/label_A.png'), ('price', 18.0)])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
    Routine testTrialRoutine
    Routine certaintyRoutine
  LoopTerminator testTrials
  Routine beforeBaselineRoutine
  LoopInitiator baselineLoop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine baselineTrialRoutine
    Routine certaintyRoutine
  LoopTerminator baselineLoop
  LoopInitiator conditionAssignLoop loopType="TrialHandler"
    conditionsFile = scaleCondition.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('scale_condition', 'labels'), ('scaleImage', 'scales/scale_labels.png')]),
      OrderedDict([('scale_condition', 'original'), ('scaleImage', 'scales/scale_original.png')]),
      OrderedDict([('scale_condition', 'linear'), ('scaleImage', 'scales/scale_linear.png')])]
    Routine assignCondition
  LoopTerminator conditionAssignLoop
  LoopInitiator experimentalLoop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    conditions:
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    Routine experimentalTrialRoutine
    Routine certaintyRoutine
  LoopTerminator experimentalLoop
  Routine debriefRoutine
